s:Ge/World/Material  = "Air"
d:Ge/World/HLX       = 1.0 m
d:Ge/World/HLY       = 1.0 m
d:Ge/World/HLZ       = 1.0 m
b:Ge/World/Invisible = "True"

s:Ge/Difusor/Parent   = "World"
s:Ge/Difusor/Type     = "TsCylinder"
s:Ge/Difusor/Material = "G4_Cu"
d:Ge/Difusor/RMin     = 0.005 cm
d:Ge/Difusor/RMax     = 0.995 cm
d:Ge/Difusor/HL       = 0.001 cm
d:Ge/Difusor/SPhi     = 0. deg
d:Ge/Difusor/DPhi     = 360. deg
d:Ge/Difusor/TransX   = 0. cm
d:Ge/Difusor/TransY   = 0. cm
d:Ge/Difusor/TransZ   = 97.001 cm
d:Ge/Difusor/RotX     = 0. deg
d:Ge/Difusor/RotY     = 0.0 deg
d:Ge/Difusor/RotZ     = 0. deg
s:Ge/Difusor/Color    = "blue"
i:Ge/Difusor/RBins    = 1
i:Ge/Difusor/PhiBins  = 1
i:Ge/Difusor/ZBins    = 1


s:Ge/Phantom/Parent   = "World"
s:Ge/Phantom/Type     = "TsCylinder"
s:Ge/Phantom/Material = "Air"
d:Ge/Phantom/RMin     = 0.0005 cm
d:Ge/Phantom/RMax     = 0.9995 cm
d:Ge/Phantom/HL       = 15. cm
d:Ge/Phantom/SPhi     = 0. deg
d:Ge/Phantom/DPhi     = 360. deg
d:Ge/Phantom/TransX   = 0. cm
d:Ge/Phantom/TransY   = 0. cm
d:Ge/Phantom/TransZ   = 82 cm
d:Ge/Phantom/RotX     = 0. deg
d:Ge/Phantom/RotY     = 0.0 deg
d:Ge/Phantom/RotZ     = 0. deg
s:Ge/Phantom/Color    = "blue"
i:Ge/Phantom/RBins    = 300
i:Ge/Phantom/PhiBins  = 1
i:Ge/Phantom/ZBins    = 1500


s:Sc/Edep_Dif/Quantity                  = "EnergyDeposit"
s:Sc/Edep_Dif/Material                  = "Air"
s:Sc/Edep_Dif/Component                 = "Phantom"
b:Sc/Edep_Dif/OutputToConsole           = "TRUE"
s:Sc/Edep_Dif/IfOutputFileAlreadyExists = "Overwrite"

s:Sc/Edep_STD_Dif/Quantity                  = "EnergyDeposit"
sv:Sc/Edep_STD_Dif/Report                   = 1 "Standard_Deviation"
s:Sc/Edep_STD_Dif/Material                  = "Air"
s:Sc/Edep_STD_Dif/Component                 = "Phantom"
b:Sc/Edep_STD_Dif/OutputToConsole           = "TRUE"
s:Sc/Edep_STD_Dif/IfOutputFileAlreadyExists = "Overwrite"


#s:Gr/ViewA/Type                            = "OpenGL"
i:Gr/ViewA/WindowSizeX                      = 100
i:Gr/ViewA/WindowSizeY                      = 100
d:Gr/ViewA/Theta                            = 55 deg
d:Gr/ViewA/Phi                              = 20 deg
s:Gr/ViewA/Projection                       = "Perspective"
d:Gr/ViewA/PerspectiveAngle                 = 30 deg
u:Gr/ViewA/Zoom                             = 1.3
b:Gr/ViewA/HiddenLineRemovalForTrajectories = "True"



s:So/Example/Type                     = "Beam"
s:So/Example/Component                = "BeamPosition"
s:So/Example/BeamParticle             = "proton"
d:So/Example/BeamEnergy               = 8 MeV
u:So/Example/BeamEnergySpread         = 0
s:So/Example/BeamPositionDistribution = "Gaussian"
s:So/Example/BeamPositionCutoffShape  = "Ellipse"
d:So/Example/BeamPositionCutoffX      = 10. cm
d:So/Example/BeamPositionCutoffY      = 10. cm
d:So/Example/BeamPositionSpreadX      = 0.000001 cm
d:So/Example/BeamPositionSpreadY      = 0.000001 cm
s:So/Example/BeamAngularDistribution  = "Gaussian"
d:So/Example/BeamAngularCutoffX       = 90. deg
d:So/Example/BeamAngularCutoffY       = 90. deg
d:So/Example/BeamAngularSpreadX       = 0.021 rad
d:So/Example/BeamAngularSpreadY       = 0.021 rad
i:So/Example/NumberOfHistoriesInRun   = 1000000

i:Ts/ShowHistoryCountAtInterval = 100
i:Ts/NumberOfThreads = 4
b:Ts/PauseBeforeQuit = "True"
