s:Ge/World/Material  = "Air"
d:Ge/World/HLX       = 1.0 m
d:Ge/World/HLY       = 1.0 m
d:Ge/World/HLZ       = 1.0 m
b:Ge/World/Invisible = "True"


s:Ge/Phantom/Parent   = "World"
s:Ge/Phantom/Type     = "TsCylinder"
s:Ge/Phantom/Material = "Air"
d:Ge/Phantom/RMin     = 0.005 cm
d:Ge/Phantom/RMax     = 2.995 cm
d:Ge/Phantom/HL       = 15 cm
d:Ge/Phantom/SPhi     = 0. deg
d:Ge/Phantom/DPhi     = 360. deg
d:Ge/Phantom/TransX   = 0. cm
d:Ge/Phantom/TransY   = 0. cm
d:Ge/Phantom/TransZ   = 83. cm
d:Ge/Phantom/RotX     = 0. deg
d:Ge/Phantom/RotY     = 0.0 deg
d:Ge/Phantom/RotZ     = 0. deg
s:Ge/Phantom/Color    = "blue"
i:Ge/Phantom/RBins    = 300
i:Ge/Phantom/PhiBins  = 1
i:Ge/Phantom/ZBins    = 1500


#CUADRUPOLO EN X

s:Ge/MagnetBoxX/Type     = "TsBox"
s:Ge/MagnetBoxX/Parent   = "World"
s:Ge/MagnetBoxX/Material = "Air"
d:Ge/MagnetBoxX/HLX      = 10 cm
d:Ge/MagnetBoxX/HLY      = 10 cm
d:Ge/MagnetBoxX/HLZ      = 1 cm
d:Ge/MagnetBoxX/RotY     = 0 deg
d:Ge/MagnetBoxX/RotX     = 0 deg
d:Ge/MagnetBoxX/TransZ   = 99. cm

s:Ge/MagnetBoxX/Field = "QuadrupoleMagnet"
d:Ge/MagnetBoxX/MagneticFieldGradientX     = 10 tesla/cm
d:Ge/MagnetBoxX/MagneticFieldGradientY     = 10 tesla/cm


s:Sc/Edep_Q/Quantity                  = "EnergyDeposit"
s:Sc/Edep_Q/Material                  = "Air"
s:Sc/Edep_Q/Component                 = "Phantom"
b:Sc/Edep_Q/OutputToConsole           = "TRUE"
s:Sc/Edep_Q/IfOutputFileAlreadyExists = "Overwrite"

s:Sc/Edep_STD_Q/Quantity                  = "EnergyDeposit"
sv:Sc/Edep_STD_Q/Report                   = 1 "Standard_Deviation"
s:Sc/Edep_STD_Q/Material                  = "Air"
s:Sc/Edep_STD_Q/Component                 = "Phantom"
b:Sc/Edep_STD_Q/OutputToConsole           = "TRUE"
s:Sc/Edep_STD_Q/IfOutputFileAlreadyExists = "Overwrite"

s:So/Example/Type                     = "Beam"
s:So/Example/Component                = "BeamPosition"
s:So/Example/BeamParticle             = "proton"
d:So/Example/BeamEnergy               = 8 MeV
u:So/Example/BeamEnergySpread         = 0
s:So/Example/BeamPositionDistribution = "Gaussian"
s:So/Example/BeamPositionCutoffShape  = "Ellipse"
d:So/Example/BeamPositionCutoffX      = 10. cm
d:So/Example/BeamPositionCutoffY      = 10. cm
d:So/Example/BeamPositionSpreadX      = 0.000001 cm
d:So/Example/BeamPositionSpreadY      = 0.000001 cm
s:So/Example/BeamAngularDistribution  = "Gaussian"
d:So/Example/BeamAngularCutoffX       = 90. deg
d:So/Example/BeamAngularCutoffY       = 90. deg
d:So/Example/BeamAngularSpreadX       = 0.021 rad
d:So/Example/BeamAngularSpreadY       = 0.021 rad
i:So/Example/NumberOfHistoriesInRun   = 10000

i:Ts/ShowHistoryCountAtInterval = 10000
i:Ts/NumberOfThreads = 10
b:Ts/PauseBeforeQuit = "True"

