s:Ge/World/Material  = "Air"
d:Ge/World/HLX       = 1.0 m
d:Ge/World/HLY       = 1.0 m
d:Ge/World/HLZ       = 1.0 m
b:Ge/World/Invisible = "True"


s:Ge/Phantom/Parent   = "World"
s:Ge/Phantom/Type     = "TsCylinder"
s:Ge/Phantom/Material = "Air"
d:Ge/Phantom/RMin     = 0.005 cm
d:Ge/Phantom/RMax     = 2.995 cm
d:Ge/Phantom/HL       = 1 cm
d:Ge/Phantom/SPhi     = 0. deg
d:Ge/Phantom/DPhi     = 360. deg
d:Ge/Phantom/TransX   = 0. cm
d:Ge/Phantom/TransY   = 0. cm
d:Ge/Phantom/TransZ   = 99. cm
d:Ge/Phantom/RotX     = 0. deg
d:Ge/Phantom/RotY     = 0.0 deg
d:Ge/Phantom/RotZ     = 0. deg
s:Ge/Phantom/Color    = "blue"
i:Ge/Phantom/RBins    = 300
i:Ge/Phantom/PhiBins  = 1
i:Ge/Phantom/ZBins    = 100
s:Ge/Phantom/Field = "QuadrupoleMagnet"
d:Ge/Phantom/MagneticFieldGradientX     = 0.1 tesla/cm
d:Ge/Phantom/MagneticFieldGradientY     = 0.1 tesla/cm


s:Ge/PhantomXY/Type       = "TsBox"
s:Ge/PhantomXY/Parent     = "World"
s:Ge/PhantomXY/Material   = "Air"
d:Ge/PhantomXY/HLX        = 1.5 cm
d:Ge/PhantomXY/HLY        = 1.5 cm
d:Ge/PhantomXY/HLZ        = 0.01 cm
d:Ge/PhantomXY/TransX     = 0. cm
d:Ge/PhantomXY/TransY     = 0. cm
d:Ge/PhantomXY/TransZ     = 97.99 cm
d:Ge/PhantomXY/RotX       = 0. deg
d:Ge/PhantomXY/RotY       = 0. deg
d:Ge/PhantomXY/RotZ       = 0. deg
i:Ge/PhantomXY/XBins      = 300
i:Ge/PhantomXY/YBins      = 300
i:Ge/PhantomXY/ZBins      = 1




s:Sc/Edep_Phantom/Quantity                  = "EnergyDeposit"
s:Sc/Edep_Phantom/Material                  = "Air"
s:Sc/Edep_Phantom/Component                 = "Phantom"
b:Sc/Edep_Phantom/OutputToConsole           = "TRUE"
s:Sc/Edep_Phantom/IfOutputFileAlreadyExists = "Overwrite"

s:Sc/Edep_STD_Phantom/Quantity                  = "EnergyDeposit"
sv:Sc/Edep_STD_Phantom/Report                   = 1 "Standard_Deviation"
s:Sc/Edep_STD_Phantom/Material                  = "Air"
s:Sc/Edep_STD_Phantom/Component                 = "Phantom"
b:Sc/Edep_STD_Phantom/OutputToConsole           = "TRUE"
s:Sc/Edep_STD_Phantom/IfOutputFileAlreadyExists = "Overwrite"

s:Sc/Edep_PhantomXY/Quantity                  = "EnergyDeposit"
s:Sc/Edep_PhantomXY/Material                  = "Air"
s:Sc/Edep_PhantomXY/Component                 = "PhantomXY"
b:Sc/Edep_PhantomXY/OutputToConsole           = "TRUE"
s:Sc/Edep_PhantomXY/IfOutputFileAlreadyExists = "Overwrite"

s:Sc/Edep_STD_PhantomXY/Quantity                  = "EnergyDeposit"
sv:Sc/Edep_STD_PhantomXY/Report                   = 1 "Standard_Deviation"
s:Sc/Edep_STD_PhantomXY/Material                  = "Air"
s:Sc/Edep_STD_PhantomXY/Component                 = "PhantomXY"
b:Sc/Edep_STD_PhantomXY/OutputToConsole           = "TRUE"
s:Sc/Edep_STD_PhantomXY/IfOutputFileAlreadyExists = "Overwrite"

s:So/Example/Type                     = "Beam"
s:So/Example/Component                = "BeamPosition"
s:So/Example/BeamParticle             = "proton"
d:So/Example/BeamEnergy               = 8 MeV
u:So/Example/BeamEnergySpread         = 0
s:So/Example/BeamPositionDistribution = "Gaussian"
s:So/Example/BeamPositionCutoffShape  = "Ellipse"
d:So/Example/BeamPositionCutoffX      = 10. cm
d:So/Example/BeamPositionCutoffY      = 10. cm
d:So/Example/BeamPositionSpreadX      = 0.000001 cm
d:So/Example/BeamPositionSpreadY      = 0.000001 cm
s:So/Example/BeamAngularDistribution  = "Gaussian"
d:So/Example/BeamAngularCutoffX       = 90. deg
d:So/Example/BeamAngularCutoffY       = 90. deg
d:So/Example/BeamAngularSpreadX       = 0.021 rad
d:So/Example/BeamAngularSpreadY       = 0.021 rad
i:So/Example/NumberOfHistoriesInRun   = 10000

i:Ts/ShowHistoryCountAtInterval = 10000
i:Ts/NumberOfThreads = 10
b:Ts/PauseBeforeQuit = "True"

