s:Ge/World/Material  = "Vacuum"
d:Ge/World/HLX       = 1.0 m
d:Ge/World/HLY       = 1.0 m
d:Ge/World/HLZ       = 1.0 m
b:Ge/World/Invisible = "True"


s:Ge/ZeroAire/Type     = "TsBox"
s:Ge/ZeroAire/Parent   = "World"
s:Ge/ZeroAire/Material = "G4_AIR"
d:Ge/ZeroAire/HLX      = 0.5 cm
d:Ge/ZeroAire/HLY      = 0.5 cm
d:Ge/ZeroAire/HLZ      = 0.005 cm
d:Ge/ZeroAire/TransZ   = 0.005 cm
s:Ge/ZeroAire/Color    = "blue"
i:Ge/ZeroAire/XBins    = 100
i:Ge/ZeroAire/YBins    = 100
i:Ge/ZeroAire/ZBins    = 1


s:Ge/AireBloque/Type     = "TsBox"
s:Ge/AireBloque/Parent   = "World"
s:Ge/AireBloque/Material = "G4_AIR"
d:Ge/AireBloque/HLX      = 0.5 cm
d:Ge/AireBloque/HLY      = 0.5 cm
d:Ge/AireBloque/HLZ      = 4.995 cm
d:Ge/AireBloque/TransZ   = 5.005 cm
s:Ge/AireBloque/Color    = "blue"
i:Ge/AireBloque/XBins    = 1
i:Ge/AireBloque/YBins    = 1
i:Ge/AireBloque/ZBins    = 1

s:Ge/PlacaAgua/Type     = "TsBox"
s:Ge/PlacaAgua/Parent   = "World"
s:Ge/PlacaAgua/Material = "G4_WATER"
d:Ge/PlacaAgua/HLX      = 0.5 cm
d:Ge/PlacaAgua/HLY      = 0.5 cm
d:Ge/PlacaAgua/HLZ      = 0.05 cm
d:Ge/PlacaAgua/TransZ   = 10.05 cm
s:Ge/PlacaAgua/Color    = "blue"
i:Ge/PlacaAgua/XBins    = 100
i:Ge/PlacaAgua/YBins    = 100
i:Ge/PlacaAgua/ZBins    = 1

s:Sc/DoseAtZero/Quantity                  = "DoseToMedium"
s:Sc/DoseAtZero/Component                 = "ZeroAire"
b:Sc/DoseAtZero/OutputToConsole           = "TRUE"
s:Sc/DoseAtZero/IfOutputFileAlreadyExists = "Overwrite"

s:Sc/DoseAtWater/Quantity                  = "DoseToMedium"
s:Sc/DoseAtWater/Component                 = "PlacaAgua"
b:Sc/DoseAtWater/OutputToConsole           = "TRUE"
s:Sc/DoseAtWater/IfOutputFileAlreadyExists = "Overwrite"

#s:Gr/ViewA/Type                            = "OpenGL"
i:Gr/ViewA/WindowSizeX                      = 900
i:Gr/ViewA/WindowSizeY                      = 900
d:Gr/ViewA/Theta                            = 55 deg
d:Gr/ViewA/Phi                              = 20 deg
s:Gr/ViewA/Projection                       = "Perspective"
d:Gr/ViewA/PerspectiveAngle                 = 30 deg
u:Gr/ViewA/Zoom                             = 1.3
b:Gr/ViewA/HiddenLineRemovalForTrajectories = "True"

sv:Ph/Default/Modules = 1 "g4em-standard_opt0"

s:So/Example/Type                     = "Beam"
s:So/Example/Component                = "BeamPosition"
s:So/Example/BeamParticle             = "proton"
d:So/Example/BeamEnergy               = 8 MeV
u:So/Example/BeamEnergySpread         = 0
s:So/Example/BeamPositionDistribution = "Gaussian"
s:So/Example/BeamPositionCutoffShape  = "Ellipse"
d:So/Example/BeamPositionCutoffX      = 10. cm
d:So/Example/BeamPositionCutoffY      = 10. cm
d:So/Example/BeamPositionSpreadX      = 0.069979661091764 cm
d:So/Example/BeamPositionSpreadY      = 0.069979661091764 cm
s:So/Example/BeamAngularDistribution  = "Gaussian"
d:So/Example/BeamAngularCutoffX       = 90. deg
d:So/Example/BeamAngularCutoffY       = 90. deg
d:So/Example/BeamAngularSpreadX       = 0.00001 rad
d:So/Example/BeamAngularSpreadY       = 0.00001 rad
i:So/Example/NumberOfHistoriesInRun   = 1000000

i:Ts/ShowHistoryCountAtInterval = 10000
i:Ts/NumberOfThreads = 7

b:Ts/PauseBeforeQuit = "True"
